CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:13
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:FileLocation

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:SAG1
    Name the output image:SAG1_illum
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:BAG1
    Name the output image:BAG1_illum
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:SAG1
    Name the output image:SAG1_corrected
    Select the illumination function:SAG1_illum
    Select how the illumination function is applied:Subtract
    Select the input image:BAG1
    Name the output image:BAG1_corrected
    Select the illumination function:BAG1_illum
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:BAG1_corrected
    Name the primary objects to be identified:Bradyzoites
    Typical diameter of objects, in pixel units (Min,Max):20,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.1,1
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    Size of adaptive window:100
    Lower outlier fraction:0.15
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:1
    Thresholding method:Robust Background

ExpandOrShrinkObjects:[module_num:9|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
    Select the input objects:Bradyzoites
    Name the output objects:Expanded_bradys
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:20
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
MaskImage:[module_num:10|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
    Select the input image:SAG1_corrected
    Name the output image:BAG1Removed_SAG1
    Use objects or an image as a mask?:Objects
    Select object for mask:Expanded_bradys
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:BAG1Removed_SAG1
    Name the primary objects to be identified:Tachyzoites
    Typical diameter of objects, in pixel units (Min,Max):20,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Size of adaptive window:100
    Lower outlier fraction:0.15
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:1
    Thresholding method:Robust Background

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:SAG1_corrected
    Select objects to measure:Tachyzoites

MeasureObjectIntensity:[module_num:13|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
    Select images to measure:SAG1_corrected
    Select objects to measure:Bradyzoites
