CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:FileLocation

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:SAG1
    Name the output image:SAG1_illum
    Select how the illumination function is calculated:Background
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    Block size:100
    Rescale the illumination function?:No
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Median Filter
    Method to calculate smoothing filter size:Automatic
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:SAG1
    Name the output image:SAG1_corrected
    Select the illumination function:SAG1_illum
    Select how the illumination function is applied:Subtract
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:SAG1_corrected
    Name the primary objects to be identified:Vacuoles
    Typical diameter of objects, in pixel units (Min,Max):8,250
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.03,1
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    Size of adaptive window:500
    Lower outlier fraction:0.15
    Upper outlier fraction:0
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:1
    Thresholding method:Robust Background

MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:Vacuoles
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No
